---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "New experiment"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "xpyriment"
set keyboard_backend "legacy"
set height 768
set foreground "black"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "uniform"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "xpyriment"
set bidi "no"
set background "white"

define loop Block1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "r"
	setcycle 0 corr2 "f"
	setcycle 0 corr1 "b"
	setcycle 0 corr7 "t"
	setcycle 0 corr6 "n"
	setcycle 0 corr5 "g"
	setcycle 0 corr4 "y"
	setcycle 0 corr9 "h"
	setcycle 0 corr8 "v"
	setcycle 0 sti8 "7.jpg"
	setcycle 0 sti9 "12.jpg"
	setcycle 0 sti6 "11.jpg"
	setcycle 0 sti7 "8.jpg"
	setcycle 0 sti4 "3.jpg"
	setcycle 0 sti5 "6.jpg"
	setcycle 0 sti2 "4.jpg"
	setcycle 0 sti3 "10.jpg"
	setcycle 0 sti1 "2.jpg"
	setcycle 1 corr3 "r"
	setcycle 1 corr2 "g"
	setcycle 1 corr1 "f"
	setcycle 1 corr7 "h"
	setcycle 1 corr6 "n"
	setcycle 1 corr5 "t"
	setcycle 1 corr4 "y"
	setcycle 1 corr9 "b"
	setcycle 1 corr8 "v"
	setcycle 1 sti8 "7.jpg"
	setcycle 1 sti9 "2.jpg"
	setcycle 1 sti6 "11.jpg"
	setcycle 1 sti7 "12.jpg"
	setcycle 1 sti4 "3.jpg"
	setcycle 1 sti5 "8.jpg"
	setcycle 1 sti2 "6.jpg"
	setcycle 1 sti3 "10.jpg"
	setcycle 1 sti1 "4.jpg"
	setcycle 2 corr3 "r"
	setcycle 2 corr2 "t"
	setcycle 2 corr1 "g"
	setcycle 2 corr7 "b"
	setcycle 2 corr6 "n"
	setcycle 2 corr5 "h"
	setcycle 2 corr4 "y"
	setcycle 2 corr9 "f"
	setcycle 2 corr8 "v"
	setcycle 2 sti8 "7.jpg"
	setcycle 2 sti9 "4.jpg"
	setcycle 2 sti6 "11.jpg"
	setcycle 2 sti7 "2.jpg"
	setcycle 2 sti4 "3.jpg"
	setcycle 2 sti5 "12.jpg"
	setcycle 2 sti2 "8.jpg"
	setcycle 2 sti3 "10.jpg"
	setcycle 2 sti1 "6.jpg"
	setcycle 3 corr3 "r"
	setcycle 3 corr2 "h"
	setcycle 3 corr1 "t"
	setcycle 3 corr7 "f"
	setcycle 3 corr6 "n"
	setcycle 3 corr5 "b"
	setcycle 3 corr4 "y"
	setcycle 3 corr9 "g"
	setcycle 3 corr8 "v"
	setcycle 3 sti8 "7.jpg"
	setcycle 3 sti9 "6.jpg"
	setcycle 3 sti6 "11.jpg"
	setcycle 3 sti7 "4.jpg"
	setcycle 3 sti4 "3.jpg"
	setcycle 3 sti5 "2.jpg"
	setcycle 3 sti2 "12.jpg"
	setcycle 3 sti3 "10.jpg"
	setcycle 3 sti1 "8.jpg"
	setcycle 4 corr3 "r"
	setcycle 4 corr2 "b"
	setcycle 4 corr1 "h"
	setcycle 4 corr7 "g"
	setcycle 4 corr6 "n"
	setcycle 4 corr5 "f"
	setcycle 4 corr4 "y"
	setcycle 4 corr9 "t"
	setcycle 4 corr8 "v"
	setcycle 4 sti8 "7.jpg"
	setcycle 4 sti9 "8.jpg"
	setcycle 4 sti6 "11.jpg"
	setcycle 4 sti7 "6.jpg"
	setcycle 4 sti4 "3.jpg"
	setcycle 4 sti5 "4.jpg"
	setcycle 4 sti2 "2.jpg"
	setcycle 4 sti3 "10.jpg"
	setcycle 4 sti1 "12.jpg"
	run Seq

define loop Block2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "f"
	setcycle 0 corr2 "n"
	setcycle 0 corr1 "h"
	setcycle 0 corr7 "r"
	setcycle 0 corr6 "t"
	setcycle 0 corr5 "g"
	setcycle 0 corr4 "v"
	setcycle 0 corr9 "b"
	setcycle 0 corr8 "y"
	setcycle 0 sti8 "3.jpg"
	setcycle 0 sti9 "2.jpg"
	setcycle 0 sti6 "8.jpg"
	setcycle 0 sti7 "10.jpg"
	setcycle 0 sti4 "7.jpg"
	setcycle 0 sti5 "6.jpg"
	setcycle 0 sti2 "11.jpg"
	setcycle 0 sti3 "4.jpg"
	setcycle 0 sti1 "12.jpg"
	setcycle 1 corr3 "b"
	setcycle 1 corr2 "n"
	setcycle 1 corr1 "t"
	setcycle 1 corr7 "r"
	setcycle 1 corr6 "g"
	setcycle 1 corr5 "f"
	setcycle 1 corr4 "v"
	setcycle 1 corr9 "h"
	setcycle 1 corr8 "y"
	setcycle 1 sti8 "3.jpg"
	setcycle 1 sti9 "12.jpg"
	setcycle 1 sti6 "6.jpg"
	setcycle 1 sti7 "10.jpg"
	setcycle 1 sti4 "7.jpg"
	setcycle 1 sti5 "4.jpg"
	setcycle 1 sti2 "11.jpg"
	setcycle 1 sti3 "2.jpg"
	setcycle 1 sti1 "8.jpg"
	setcycle 2 corr3 "h"
	setcycle 2 corr2 "n"
	setcycle 2 corr1 "g"
	setcycle 2 corr7 "r"
	setcycle 2 corr6 "f"
	setcycle 2 corr5 "b"
	setcycle 2 corr4 "v"
	setcycle 2 corr9 "t"
	setcycle 2 corr8 "y"
	setcycle 2 sti8 "3.jpg"
	setcycle 2 sti9 "8.jpg"
	setcycle 2 sti6 "4.jpg"
	setcycle 2 sti7 "10.jpg"
	setcycle 2 sti4 "7.jpg"
	setcycle 2 sti5 "2.jpg"
	setcycle 2 sti2 "11.jpg"
	setcycle 2 sti3 "12.jpg"
	setcycle 2 sti1 "6.jpg"
	setcycle 3 corr3 "t"
	setcycle 3 corr2 "n"
	setcycle 3 corr1 "f"
	setcycle 3 corr7 "r"
	setcycle 3 corr6 "b"
	setcycle 3 corr5 "h"
	setcycle 3 corr4 "v"
	setcycle 3 corr9 "g"
	setcycle 3 corr8 "y"
	setcycle 3 sti8 "3.jpg"
	setcycle 3 sti9 "6.jpg"
	setcycle 3 sti6 "2.jpg"
	setcycle 3 sti7 "10.jpg"
	setcycle 3 sti4 "7.jpg"
	setcycle 3 sti5 "12.jpg"
	setcycle 3 sti2 "11.jpg"
	setcycle 3 sti3 "8.jpg"
	setcycle 3 sti1 "4.jpg"
	setcycle 4 corr3 "g"
	setcycle 4 corr2 "n"
	setcycle 4 corr1 "b"
	setcycle 4 corr7 "r"
	setcycle 4 corr6 "h"
	setcycle 4 corr5 "t"
	setcycle 4 corr4 "v"
	setcycle 4 corr9 "f"
	setcycle 4 corr8 "y"
	setcycle 4 sti8 "3.jpg"
	setcycle 4 sti9 "4.jpg"
	setcycle 4 sti6 "12.jpg"
	setcycle 4 sti7 "10.jpg"
	setcycle 4 sti4 "7.jpg"
	setcycle 4 sti5 "8.jpg"
	setcycle 4 sti2 "11.jpg"
	setcycle 4 sti3 "6.jpg"
	setcycle 4 sti1 "2.jpg"
	run Seq

define loop Block3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "r"
	setcycle 0 corr2 "b"
	setcycle 0 corr1 "f"
	setcycle 0 corr7 "h"
	setcycle 0 corr6 "n"
	setcycle 0 corr5 "t"
	setcycle 0 corr4 "y"
	setcycle 0 corr9 "g"
	setcycle 0 corr8 "v"
	setcycle 0 sti8 "7.jpg"
	setcycle 0 sti9 "6.jpg"
	setcycle 0 sti6 "11.jpg"
	setcycle 0 sti7 "12.jpg"
	setcycle 0 sti4 "3.jpg"
	setcycle 0 sti5 "8.jpg"
	setcycle 0 sti2 "2.jpg"
	setcycle 0 sti3 "10.jpg"
	setcycle 0 sti1 "4.jpg"
	setcycle 1 corr3 "r"
	setcycle 1 corr2 "f"
	setcycle 1 corr1 "g"
	setcycle 1 corr7 "b"
	setcycle 1 corr6 "n"
	setcycle 1 corr5 "h"
	setcycle 1 corr4 "y"
	setcycle 1 corr9 "t"
	setcycle 1 corr8 "v"
	setcycle 1 sti8 "7.jpg"
	setcycle 1 sti9 "8.jpg"
	setcycle 1 sti6 "11.jpg"
	setcycle 1 sti7 "2.jpg"
	setcycle 1 sti4 "3.jpg"
	setcycle 1 sti5 "12.jpg"
	setcycle 1 sti2 "4.jpg"
	setcycle 1 sti3 "10.jpg"
	setcycle 1 sti1 "6.jpg"
	setcycle 2 corr3 "r"
	setcycle 2 corr2 "g"
	setcycle 2 corr1 "t"
	setcycle 2 corr7 "f"
	setcycle 2 corr6 "n"
	setcycle 2 corr5 "b"
	setcycle 2 corr4 "y"
	setcycle 2 corr9 "h"
	setcycle 2 corr8 "v"
	setcycle 2 sti8 "7.jpg"
	setcycle 2 sti9 "12.jpg"
	setcycle 2 sti6 "11.jpg"
	setcycle 2 sti7 "4.jpg"
	setcycle 2 sti4 "3.jpg"
	setcycle 2 sti5 "2.jpg"
	setcycle 2 sti2 "6.jpg"
	setcycle 2 sti3 "10.jpg"
	setcycle 2 sti1 "8.jpg"
	setcycle 3 corr3 "r"
	setcycle 3 corr2 "t"
	setcycle 3 corr1 "h"
	setcycle 3 corr7 "g"
	setcycle 3 corr6 "n"
	setcycle 3 corr5 "f"
	setcycle 3 corr4 "y"
	setcycle 3 corr9 "b"
	setcycle 3 corr8 "v"
	setcycle 3 sti8 "7.jpg"
	setcycle 3 sti9 "2.jpg"
	setcycle 3 sti6 "11.jpg"
	setcycle 3 sti7 "6.jpg"
	setcycle 3 sti4 "3.jpg"
	setcycle 3 sti5 "4.jpg"
	setcycle 3 sti2 "8.jpg"
	setcycle 3 sti3 "10.jpg"
	setcycle 3 sti1 "12.jpg"
	setcycle 4 corr3 "r"
	setcycle 4 corr2 "h"
	setcycle 4 corr1 "b"
	setcycle 4 corr7 "t"
	setcycle 4 corr6 "n"
	setcycle 4 corr5 "g"
	setcycle 4 corr4 "y"
	setcycle 4 corr9 "f"
	setcycle 4 corr8 "v"
	setcycle 4 sti8 "7.jpg"
	setcycle 4 sti9 "4.jpg"
	setcycle 4 sti6 "11.jpg"
	setcycle 4 sti7 "8.jpg"
	setcycle 4 sti4 "3.jpg"
	setcycle 4 sti5 "6.jpg"
	setcycle 4 sti2 "12.jpg"
	setcycle 4 sti3 "10.jpg"
	setcycle 4 sti1 "2.jpg"
	run Seq

define loop Block4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "t"
	setcycle 0 corr2 "n"
	setcycle 0 corr1 "g"
	setcycle 0 corr7 "r"
	setcycle 0 corr6 "b"
	setcycle 0 corr5 "h"
	setcycle 0 corr4 "v"
	setcycle 0 corr9 "f"
	setcycle 0 corr8 "y"
	setcycle 0 sti8 "3.jpg"
	setcycle 0 sti9 "4.jpg"
	setcycle 0 sti6 "2.jpg"
	setcycle 0 sti7 "10.jpg"
	setcycle 0 sti4 "7.jpg"
	setcycle 0 sti5 "12.jpg"
	setcycle 0 sti2 "11.jpg"
	setcycle 0 sti3 "8.jpg"
	setcycle 0 sti1 "6.jpg"
	setcycle 1 corr3 "g"
	setcycle 1 corr2 "n"
	setcycle 1 corr1 "f"
	setcycle 1 corr7 "r"
	setcycle 1 corr6 "h"
	setcycle 1 corr5 "t"
	setcycle 1 corr4 "v"
	setcycle 1 corr9 "b"
	setcycle 1 corr8 "y"
	setcycle 1 sti8 "3.jpg"
	setcycle 1 sti9 "2.jpg"
	setcycle 1 sti6 "12.jpg"
	setcycle 1 sti7 "10.jpg"
	setcycle 1 sti4 "7.jpg"
	setcycle 1 sti5 "8.jpg"
	setcycle 1 sti2 "11.jpg"
	setcycle 1 sti3 "6.jpg"
	setcycle 1 sti1 "4.jpg"
	setcycle 2 corr3 "f"
	setcycle 2 corr2 "n"
	setcycle 2 corr1 "b"
	setcycle 2 corr7 "r"
	setcycle 2 corr6 "t"
	setcycle 2 corr5 "g"
	setcycle 2 corr4 "v"
	setcycle 2 corr9 "h"
	setcycle 2 corr8 "y"
	setcycle 2 sti8 "3.jpg"
	setcycle 2 sti9 "12.jpg"
	setcycle 2 sti6 "8.jpg"
	setcycle 2 sti7 "10.jpg"
	setcycle 2 sti4 "7.jpg"
	setcycle 2 sti5 "6.jpg"
	setcycle 2 sti2 "11.jpg"
	setcycle 2 sti3 "4.jpg"
	setcycle 2 sti1 "2.jpg"
	setcycle 3 corr3 "b"
	setcycle 3 corr2 "n"
	setcycle 3 corr1 "h"
	setcycle 3 corr7 "r"
	setcycle 3 corr6 "g"
	setcycle 3 corr5 "f"
	setcycle 3 corr4 "v"
	setcycle 3 corr9 "t"
	setcycle 3 corr8 "y"
	setcycle 3 sti8 "3.jpg"
	setcycle 3 sti9 "8.jpg"
	setcycle 3 sti6 "6.jpg"
	setcycle 3 sti7 "10.jpg"
	setcycle 3 sti4 "7.jpg"
	setcycle 3 sti5 "4.jpg"
	setcycle 3 sti2 "11.jpg"
	setcycle 3 sti3 "2.jpg"
	setcycle 3 sti1 "12.jpg"
	setcycle 4 corr3 "h"
	setcycle 4 corr2 "n"
	setcycle 4 corr1 "t"
	setcycle 4 corr7 "r"
	setcycle 4 corr6 "f"
	setcycle 4 corr5 "b"
	setcycle 4 corr4 "v"
	setcycle 4 corr9 "g"
	setcycle 4 corr8 "y"
	setcycle 4 sti8 "3.jpg"
	setcycle 4 sti9 "6.jpg"
	setcycle 4 sti6 "4.jpg"
	setcycle 4 sti7 "10.jpg"
	setcycle 4 sti4 "7.jpg"
	setcycle 4 sti5 "2.jpg"
	setcycle 4 sti2 "11.jpg"
	setcycle 4 sti3 "12.jpg"
	setcycle 4 sti1 "8.jpg"
	run Seq

define loop Block6
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "r"
	setcycle 0 corr2 "g"
	setcycle 0 corr1 "h"
	setcycle 0 corr7 "f"
	setcycle 0 corr6 "n"
	setcycle 0 corr5 "b"
	setcycle 0 corr4 "y"
	setcycle 0 corr9 "t"
	setcycle 0 corr8 "v"
	setcycle 0 sti8 "7.jpg"
	setcycle 0 sti9 "8.jpg"
	setcycle 0 sti6 "11.jpg"
	setcycle 0 sti7 "4.jpg"
	setcycle 0 sti4 "3.jpg"
	setcycle 0 sti5 "2.jpg"
	setcycle 0 sti2 "6.jpg"
	setcycle 0 sti3 "10.jpg"
	setcycle 0 sti1 "12.jpg"
	setcycle 1 corr3 "r"
	setcycle 1 corr2 "t"
	setcycle 1 corr1 "b"
	setcycle 1 corr7 "g"
	setcycle 1 corr6 "n"
	setcycle 1 corr5 "f"
	setcycle 1 corr4 "y"
	setcycle 1 corr9 "h"
	setcycle 1 corr8 "v"
	setcycle 1 sti8 "7.jpg"
	setcycle 1 sti9 "12.jpg"
	setcycle 1 sti6 "11.jpg"
	setcycle 1 sti7 "6.jpg"
	setcycle 1 sti4 "3.jpg"
	setcycle 1 sti5 "4.jpg"
	setcycle 1 sti2 "8.jpg"
	setcycle 1 sti3 "10.jpg"
	setcycle 1 sti1 "2.jpg"
	setcycle 2 corr3 "r"
	setcycle 2 corr2 "h"
	setcycle 2 corr1 "f"
	setcycle 2 corr7 "t"
	setcycle 2 corr6 "n"
	setcycle 2 corr5 "g"
	setcycle 2 corr4 "y"
	setcycle 2 corr9 "b"
	setcycle 2 corr8 "v"
	setcycle 2 sti8 "7.jpg"
	setcycle 2 sti9 "2.jpg"
	setcycle 2 sti6 "11.jpg"
	setcycle 2 sti7 "8.jpg"
	setcycle 2 sti4 "3.jpg"
	setcycle 2 sti5 "6.jpg"
	setcycle 2 sti2 "12.jpg"
	setcycle 2 sti3 "10.jpg"
	setcycle 2 sti1 "4.jpg"
	setcycle 3 corr3 "r"
	setcycle 3 corr2 "b"
	setcycle 3 corr1 "g"
	setcycle 3 corr7 "h"
	setcycle 3 corr6 "n"
	setcycle 3 corr5 "t"
	setcycle 3 corr4 "y"
	setcycle 3 corr9 "f"
	setcycle 3 corr8 "v"
	setcycle 3 sti8 "7.jpg"
	setcycle 3 sti9 "4.jpg"
	setcycle 3 sti6 "11.jpg"
	setcycle 3 sti7 "12.jpg"
	setcycle 3 sti4 "3.jpg"
	setcycle 3 sti5 "8.jpg"
	setcycle 3 sti2 "2.jpg"
	setcycle 3 sti3 "10.jpg"
	setcycle 3 sti1 "6.jpg"
	setcycle 4 corr3 "r"
	setcycle 4 corr2 "f"
	setcycle 4 corr1 "t"
	setcycle 4 corr7 "b"
	setcycle 4 corr6 "n"
	setcycle 4 corr5 "h"
	setcycle 4 corr4 "y"
	setcycle 4 corr9 "g"
	setcycle 4 corr8 "v"
	setcycle 4 sti8 "7.jpg"
	setcycle 4 sti9 "6.jpg"
	setcycle 4 sti6 "11.jpg"
	setcycle 4 sti7 "2.jpg"
	setcycle 4 sti4 "3.jpg"
	setcycle 4 sti5 "12.jpg"
	setcycle 4 sti2 "4.jpg"
	setcycle 4 sti3 "10.jpg"
	setcycle 4 sti1 "8.jpg"
	run Seq

define loop Block7
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 5
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "g"
	setcycle 0 corr2 "n"
	setcycle 0 corr1 "t"
	setcycle 0 corr7 "r"
	setcycle 0 corr6 "f"
	setcycle 0 corr5 "b"
	setcycle 0 corr4 "v"
	setcycle 0 corr9 "h"
	setcycle 0 corr8 "y"
	setcycle 0 sti8 "3.jpg"
	setcycle 0 sti9 "12.jpg"
	setcycle 0 sti6 "4.jpg"
	setcycle 0 sti7 "10.jpg"
	setcycle 0 sti4 "7.jpg"
	setcycle 0 sti5 "2.jpg"
	setcycle 0 sti2 "11.jpg"
	setcycle 0 sti3 "6.jpg"
	setcycle 0 sti1 "8.jpg"
	setcycle 1 corr3 "f"
	setcycle 1 corr2 "n"
	setcycle 1 corr1 "g"
	setcycle 1 corr7 "r"
	setcycle 1 corr6 "b"
	setcycle 1 corr5 "h"
	setcycle 1 corr4 "v"
	setcycle 1 corr9 "t"
	setcycle 1 corr8 "y"
	setcycle 1 sti8 "3.jpg"
	setcycle 1 sti9 "8.jpg"
	setcycle 1 sti6 "2.jpg"
	setcycle 1 sti7 "10.jpg"
	setcycle 1 sti4 "7.jpg"
	setcycle 1 sti5 "12.jpg"
	setcycle 1 sti2 "11.jpg"
	setcycle 1 sti3 "4.jpg"
	setcycle 1 sti1 "6.jpg"
	setcycle 2 corr3 "b"
	setcycle 2 corr2 "n"
	setcycle 2 corr1 "f"
	setcycle 2 corr7 "r"
	setcycle 2 corr6 "h"
	setcycle 2 corr5 "t"
	setcycle 2 corr4 "v"
	setcycle 2 corr9 "g"
	setcycle 2 corr8 "y"
	setcycle 2 sti8 "3.jpg"
	setcycle 2 sti9 "6.jpg"
	setcycle 2 sti6 "12.jpg"
	setcycle 2 sti7 "10.jpg"
	setcycle 2 sti4 "7.jpg"
	setcycle 2 sti5 "8.jpg"
	setcycle 2 sti2 "11.jpg"
	setcycle 2 sti3 "2.jpg"
	setcycle 2 sti1 "4.jpg"
	setcycle 3 corr3 "h"
	setcycle 3 corr2 "n"
	setcycle 3 corr1 "b"
	setcycle 3 corr7 "r"
	setcycle 3 corr6 "t"
	setcycle 3 corr5 "g"
	setcycle 3 corr4 "v"
	setcycle 3 corr9 "f"
	setcycle 3 corr8 "y"
	setcycle 3 sti8 "3.jpg"
	setcycle 3 sti9 "4.jpg"
	setcycle 3 sti6 "8.jpg"
	setcycle 3 sti7 "10.jpg"
	setcycle 3 sti4 "7.jpg"
	setcycle 3 sti5 "6.jpg"
	setcycle 3 sti2 "11.jpg"
	setcycle 3 sti3 "12.jpg"
	setcycle 3 sti1 "2.jpg"
	setcycle 4 corr3 "t"
	setcycle 4 corr2 "n"
	setcycle 4 corr1 "h"
	setcycle 4 corr7 "r"
	setcycle 4 corr6 "g"
	setcycle 4 corr5 "f"
	setcycle 4 corr4 "v"
	setcycle 4 corr9 "b"
	setcycle 4 corr8 "y"
	setcycle 4 sti8 "3.jpg"
	setcycle 4 sti9 "2.jpg"
	setcycle 4 sti6 "6.jpg"
	setcycle 4 sti7 "10.jpg"
	setcycle 4 sti4 "7.jpg"
	setcycle 4 sti5 "4.jpg"
	setcycle 4 sti2 "11.jpg"
	setcycle 4 sti3 "8.jpg"
	setcycle 4 sti1 "12.jpg"
	run Seq

define loop RanBlock
	set skip 0
	set repeat 0.56
	set order "random"
	set offset "no"
	set item "Seq"
	set description "Repeatedly runs another item"
	set cycles 9
	set column_order "sti1;corr1;sti2;corr2;sti3;corr3;sti4;corr4;sti5;corr5;sti6;corr6;sti7;corr7;sti8;corr8;sti9;corr9"
	set break_if "never"
	setcycle 0 corr3 "h"
	setcycle 0 corr2 "v"
	setcycle 0 corr1 "b"
	setcycle 0 corr7 "n"
	setcycle 0 corr6 "t"
	setcycle 0 corr5 "y"
	setcycle 0 corr4 "f"
	setcycle 0 corr9 "g"
	setcycle 0 corr8 "r"
	setcycle 0 sti8 "10.jpg"
	setcycle 0 sti9 "6.jpg"
	setcycle 0 sti6 "8.jpg"
	setcycle 0 sti7 "11.jpg"
	setcycle 0 sti4 "4.jpg"
	setcycle 0 sti5 "3.jpg"
	setcycle 0 sti2 "7.jpg"
	setcycle 0 sti3 "12.jpg"
	setcycle 0 sti1 "2.jpg"
	setcycle 1 corr3 "b"
	setcycle 1 corr2 "g"
	setcycle 1 corr1 "f"
	setcycle 1 corr7 "v"
	setcycle 1 corr6 "y"
	setcycle 1 corr5 "t"
	setcycle 1 corr4 "h"
	setcycle 1 corr9 "r"
	setcycle 1 corr8 "n"
	setcycle 1 sti8 "11.jpg"
	setcycle 1 sti9 "10.jpg"
	setcycle 1 sti6 "3.jpg"
	setcycle 1 sti7 "7.jpg"
	setcycle 1 sti4 "12.jpg"
	setcycle 1 sti5 "8.jpg"
	setcycle 1 sti2 "6.jpg"
	setcycle 1 sti3 "2.jpg"
	setcycle 1 sti1 "4.jpg"
	setcycle 2 corr3 "v"
	setcycle 2 corr2 "n"
	setcycle 2 corr1 "g"
	setcycle 2 corr7 "t"
	setcycle 2 corr6 "b"
	setcycle 2 corr5 "h"
	setcycle 2 corr4 "r"
	setcycle 2 corr9 "f"
	setcycle 2 corr8 "y"
	setcycle 2 sti8 "3.jpg"
	setcycle 2 sti9 "4.jpg"
	setcycle 2 sti6 "2.jpg"
	setcycle 2 sti7 "8.jpg"
	setcycle 2 sti4 "10.jpg"
	setcycle 2 sti5 "12.jpg"
	setcycle 2 sti2 "11.jpg"
	setcycle 2 sti3 "7.jpg"
	setcycle 2 sti1 "6.jpg"
	setcycle 3 corr3 "r"
	setcycle 3 corr2 "f"
	setcycle 3 corr1 "t"
	setcycle 3 corr7 "y"
	setcycle 3 corr6 "h"
	setcycle 3 corr5 "b"
	setcycle 3 corr4 "g"
	setcycle 3 corr9 "n"
	setcycle 3 corr8 "v"
	setcycle 3 sti8 "7.jpg"
	setcycle 3 sti9 "11.jpg"
	setcycle 3 sti6 "12.jpg"
	setcycle 3 sti7 "3.jpg"
	setcycle 3 sti4 "6.jpg"
	setcycle 3 sti5 "2.jpg"
	setcycle 3 sti2 "4.jpg"
	setcycle 3 sti3 "10.jpg"
	setcycle 3 sti1 "8.jpg"
	setcycle 4 corr3 "g"
	setcycle 4 corr2 "y"
	setcycle 4 corr1 "h"
	setcycle 4 corr7 "b"
	setcycle 4 corr6 "r"
	setcycle 4 corr5 "f"
	setcycle 4 corr4 "n"
	setcycle 4 corr9 "v"
	setcycle 4 corr8 "t"
	setcycle 4 sti8 "8.jpg"
	setcycle 4 sti9 "7.jpg"
	setcycle 4 sti6 "10.jpg"
	setcycle 4 sti7 "2.jpg"
	setcycle 4 sti4 "11.jpg"
	setcycle 4 sti5 "4.jpg"
	setcycle 4 sti2 "3.jpg"
	setcycle 4 sti3 "6.jpg"
	setcycle 4 sti1 "12.jpg"
	setcycle 5 corr3 "y"
	setcycle 5 corr2 "t"
	setcycle 5 corr1 "r"
	setcycle 5 corr7 "f"
	setcycle 5 corr6 "g"
	setcycle 5 corr5 "n"
	setcycle 5 corr4 "v"
	setcycle 5 corr9 "h"
	setcycle 5 corr8 "b"
	setcycle 5 sti8 "2.jpg"
	setcycle 5 sti9 "12.jpg"
	setcycle 5 sti6 "6.jpg"
	setcycle 5 sti7 "4.jpg"
	setcycle 5 sti4 "7.jpg"
	setcycle 5 sti5 "11.jpg"
	setcycle 5 sti2 "8.jpg"
	setcycle 5 sti3 "3.jpg"
	setcycle 5 sti1 "10.jpg"
	setcycle 6 corr3 "n"
	setcycle 6 corr2 "r"
	setcycle 6 corr1 "y"
	setcycle 6 corr7 "h"
	setcycle 6 corr6 "f"
	setcycle 6 corr5 "v"
	setcycle 6 corr4 "t"
	setcycle 6 corr9 "b"
	setcycle 6 corr8 "g"
	setcycle 6 sti8 "6.jpg"
	setcycle 6 sti9 "2.jpg"
	setcycle 6 sti6 "4.jpg"
	setcycle 6 sti7 "12.jpg"
	setcycle 6 sti4 "8.jpg"
	setcycle 6 sti5 "7.jpg"
	setcycle 6 sti2 "10.jpg"
	setcycle 6 sti3 "11.jpg"
	setcycle 6 sti1 "3.jpg"
	setcycle 7 corr3 "t"
	setcycle 7 corr2 "h"
	setcycle 7 corr1 "v"
	setcycle 7 corr7 "g"
	setcycle 7 corr6 "n"
	setcycle 7 corr5 "r"
	setcycle 7 corr4 "b"
	setcycle 7 corr9 "y"
	setcycle 7 corr8 "f"
	setcycle 7 sti8 "4.jpg"
	setcycle 7 sti9 "3.jpg"
	setcycle 7 sti6 "11.jpg"
	setcycle 7 sti7 "6.jpg"
	setcycle 7 sti4 "2.jpg"
	setcycle 7 sti5 "10.jpg"
	setcycle 7 sti2 "12.jpg"
	setcycle 7 sti3 "8.jpg"
	setcycle 7 sti1 "7.jpg"
	setcycle 8 corr3 "f"
	setcycle 8 corr2 "b"
	setcycle 8 corr1 "n"
	setcycle 8 corr7 "r"
	setcycle 8 corr6 "v"
	setcycle 8 corr5 "g"
	setcycle 8 corr4 "y"
	setcycle 8 corr9 "t"
	setcycle 8 corr8 "h"
	setcycle 8 sti8 "12.jpg"
	setcycle 8 sti9 "8.jpg"
	setcycle 8 sti6 "7.jpg"
	setcycle 8 sti7 "10.jpg"
	setcycle 8 sti4 "3.jpg"
	setcycle 8 sti5 "6.jpg"
	setcycle 8 sti2 "2.jpg"
	setcycle 8 sti3 "4.jpg"
	setcycle 8 sti1 "11.jpg"
	run Seq

define sketchpad RealStart
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="introB.jpg" scale=0.8 show_if=always x=0 y=0 z_index=0

define sequence Seq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run sti1 always
	run resp1 always
	run sti2 always
	run resp2 always
	run sti3 always
	run resp3 always
	run sti4 always
	run resp4 always
	run sti5 always
	run resp5 always
	run sti6 always
	run resp6 always
	run sti7 always
	run resp7 always
	run sti8 always
	run resp8 always
	run sti9 always
	run resp9 always
	run new_sketchpad always
	run logger always

define keyboard_response SpaceBar
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "space"

define sketchpad StudyEnd
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="welldone1.jpg" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad assure
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="assure.jpg" scale=0.8 show_if=always x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run inline_script always
	run RealStart always
	run SpaceBar always
	run fixation_dot always
	run Block1 "[version]==0"
	run Block2 "[version]==0"
	run Block2 "[version]==1"
	run Block1 "[version]==1"
	run assure always
	run SpaceBar always
	run fixation_dot always
	run Block3 "[version]==0"
	run Block4 "[version]==0"
	run Block4 "[version]==1"
	run Block3 "[version]==1"
	run assure always
	run SpaceBar always
	run fixation_dot always
	run Block6 "[version]==0"
	run Block7 "[version]==0"
	run Block7 "[version]==1"
	run Block6 "[version]==1"
	run RanBlock always
	run StudyEnd always
	run SpaceBar always

define fixation_dot fixation_dot
	set y 0
	set x 0
	set style "default"
	set penwidth 3
	set foreground "black"
	set duration 500
	set description "Presents a central fixation dot with a choice of various styles"
	set background "white"

define inline_script inline_script
	set description "Executes Python code"
	set _run "exp.set('version',exp.get('subject_nr')%2)"
	set _prepare ""

define logger logger
	set description "Logs experimental data"
	set auto_log "no"
	log sti1
	log sti2
	log sti3
	log sti4
	log sti5
	log sti6
	log sti7
	log sti8
	log sti9
	log corr1
	log corr2
	log corr3
	log corr4
	log corr5
	log corr6
	log corr7
	log corr8
	log corr9
	log response_resp1
	log response_resp2
	log response_resp3
	log response_resp4
	log response_resp5
	log response_resp6
	log response_resp7
	log response_resp8
	log response_resp9
	log response_time_resp1
	log response_time_resp2
	log response_time_resp3
	log response_time_resp4
	log response_time_resp5
	log response_time_resp6
	log response_time_resp7
	log response_time_resp8
	log response_time_resp9
	log correct_resp1
	log correct_resp2
	log correct_resp3
	log correct_resp4
	log correct_resp5
	log correct_resp6
	log correct_resp7
	log correct_resp8
	log correct_resp9

define sketchpad new_sketchpad
	set duration 0
	set description "Displays stimuli"

define keyboard_response resp1
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr1]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp2
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr2]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp3
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr3]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp4
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr4]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp5
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr5]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp6
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr6]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp7
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr7]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp8
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr8]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define keyboard_response resp9
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[corr9]"
	set allowed_responses "r;t;y;f;g;h;v;b;n"

define sketchpad sti1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti1]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti2]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti3]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti4
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti4]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti5
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti5]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti6
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti6]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti7
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti7]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti8
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti8]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad sti9
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[sti9]" scale=1 show_if=always x=0 y=0 z_index=0

